<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
			      xmlns="http://gadgetron.sf.net/gadgetron"
			      xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

  <reader>
    <slot>1008</slot>
    <dll>gadgetron_mricore</dll>
    <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
  </reader>

  <writer>
    <slot>1022</slot>
    <dll>gadgetron_mricore</dll>
    <classname>MRIImageWriter</classname>
  </writer>

  <gadget>
    <name>MatlabAcquisition</name>
    <dll>gadgetron_matlab</dll>
    <classname>AcquisitionMatlabGadget</classname>
    <property><name>debug_mode</name><value>false</value></property>
    <property><name>matlab_path</name><value></value></property>
    <property><name>matlab_classname</name><value>scale</value></property>
    <property><name>matlab_port</name><value>3000</value></property>
  </gadget>

  <gadget>
    <name>MatlabAcquisition</name>
    <dll>gadgetron_matlab</dll>
    <classname>AcquisitionMatlabGadget</classname>
    <property><name>matlab_path</name><value></value></property>
    <property><name>matlab_classname</name><value>accumulate_and_recon</value></property>
    <property><name>matlab_port</name><value>3001</value></property>
  </gadget>

  <gadget>
    <name>CropCombine</name>
    <dll>gadgetron_mricore</dll>
    <classname>CropAndCombineGadget</classname>
  </gadget>

  <gadget>
    <name>MatlabImage</name>
    <dll>gadgetron_matlab</dll>
    <classname>ImageMatlabGadget</classname>
    <property><name>matlab_path</name><value></value></property>
    <property><name>matlab_classname</name><value>mask_image</value></property>
    <property><name>matlab_port</name><value>3002</value></property>
  </gadget>

  <gadget>
    <name>Extract</name>
    <dll>gadgetron_mricore</dll>
    <classname>ExtractGadget</classname>
  </gadget>

  <gadget>
    <name>ImageFinish</name>
    <dll>gadgetron_mricore</dll>
    <classname>ImageFinishGadget</classname>
  </gadget>
</gadgetronStreamConfiguration>
